// FIJI: LabelsToROIs Plugin Processing Macros
  // Written by Kristina M. Sattler

// Copy and paste code below into individual macro windows:

// ====================================================================================================================
// ===================================================== Macro 1 ======================================================
// ============================================== Filter ROIs by size =================================================
// ====================================================================================================================
  // Filter ROIs by area size
     // Adapted from script written by @scouser27 on image.sc

AreaThreshold = 50;                  // EDIT: Set this value to whatever minimum area to filter by
ScalePixels = 1300;                  // EDIT: Distance in pixels
ScaleDistance = 435;                 // EDIT: Known distance
ScalePAR = 1.0;                      // EDIT: Pixel Aspect Ratio (this will almost always be 1.0)
ScaleUnit = "um";                    // EDIT: Unit of measurement
Magnification = "20x";               // EDIT: Magnification
Microscope = "Lepper_Zeiss"          // EDIT: Microscope 
Measurements = "area mean standard modal feret's integrated display redirect=None decimal=3"             // EDIT: Set measurements

run("Set Scale...", "distance=" + ScalePixels + " known=" + ScaleDistance + " pixel=" + ScalePAR + " unit=" + ScaleUnit);

run("Set Measurements...", Measurements);

//setBatchMode("hide");
i=0;
fin = roiManager("count");
while(i<fin){
	roiManager("select", i);
	if(getValue("Area")<AreaThreshold){
		roiManager("delete");
		fin = fin - 1;
	} else {
		i++;
	}
}

run("Remove Overlay");
setBatchMode("exit and display");

// ====================================================================================================================
// ===================================================== Macro 2 ======================================================
// ================================================= Set ROI groups ===================================================
// ====================================================================================================================
  // EDIT: Set the group you want the ROI to be classified with and the color of the ROI. Easiest to use individual macro files for each classification

//CN-
RoiManager.setGroup(1);
RoiManager.setPosition(0);
roiManager("Set Line Width", 2);
Roi.setStrokeColor("blue");

// Double
RoiManager.setGroup(2);
RoiManager.setPosition(0);
roiManager("Set Line Width", 2);
Roi.setStrokeColor("green");

// Triple
RoiManager.setGroup(3);
RoiManager.setPosition(0);
roiManager("Set Line Width", 2);
Roi.setStrokeColor("green");

// Delete
RoiManager.setGroup(4);
RoiManager.setPosition(0);
roiManager("Set Line Width", 2);
Roi.setStrokeColor("red");

// ====================================================================================================================
// ===================================================== Macro 3 ======================================================
// ================================ Set scale and measurements, combine ROIs, measure =================================
// ====================================================================================================================
  // EDIT: Save image with filtered and combined ROIs as a TIFF

saveAs("Tiff", "/Pathway/to/my/Folder/Name_of_the_Image.tif");
close("*");

// ====================================================================================================================
// ===================================================== Macro 4 ======================================================
// ============================= Set scale and measurements, measure, and save the image ==============================
// ====================================================================================================================
  // EDIT: Set image parameters and save the image
    // Scales according to the microscope
      // See for scale info of some scopes: https://docs.google.com/spreadsheets/d/1gvoAxs_YZx7wtsSA4yOZahkqLqwiAFH7YwQDcSyx0jA/edit?usp=sharing
      // Pixel aspect ratio is set to 1.0 by default
    // Set the measurements 
      // See for measurement options: https://docs.google.com/spreadsheets/d/1gvoAxs_YZx7wtsSA4yOZahkqLqwiAFH7YwQDcSyx0jA/edit?usp=sharing 
    // Current settings: Area, perimeter, Feret's Diameter, display label, no redirection, 2 decimal places 
    // Save as a TIFF

ScalePixels = 455;                   // Distance in pixels
ScaleDistance = 500;                 // Known distance
ScalePAR = 1.0;                      // Pixel Aspect Ratio (this will almost always be 1.0)
ScaleUnit = "um";                    // Unit of measurement
Measurements = "area perimeter feret's display redirect=None decimal=2"

run("Set Scale...", "distance=" + ScalePixels + " known=" + ScaleDistance + " pixel=" + ScalePAR + " unit=" + ScaleUnit);
run("Set Measurements...", Measurements);
roiManager("Measure");

saveAs("Tiff", "/Pathway/to/my/Folder/Name_of_the_Image.tif");

// ====================================================================================================================
// ===================================================== Macro 5 ======================================================
// ================================ Set scale and measurements, combine ROIs, measure =================================
// ====================================================================================================================
  // EDIT: Set image parameters, combine all ROIs, measure
    // Scales according to the microscope
      // See for scale info of some scopes: https://docs.google.com/spreadsheets/d/1gvoAxs_YZx7wtsSA4yOZahkqLqwiAFH7YwQDcSyx0jA/edit?usp=sharing
      // Pixel aspect ratio is set to 1.0 by default
    // Set the measurements 
      // See for measurement options: https://docs.google.com/spreadsheets/d/1gvoAxs_YZx7wtsSA4yOZahkqLqwiAFH7YwQDcSyx0jA/edit?usp=sharing 
    // Current settings: Area, Mean Grey Value, Standard Deviation, Modal Grey Value, Min&Max Grey Value, Integrated Density, Median Grey Value, Display Label, no redirection, 2 decimal places 

ScalePixels = 455;                   // Distance in pixels
ScaleDistance = 500;                 // Known distance
ScalePAR = 1.0;                      // Pixel Aspect Ratio (this will almost always be 1.0)
ScaleUnit = "um";                    // Unit of measurement
Measurements = "area mean standard modal min feret's integrated median display redirect=None decimal=2"

run("Set Scale...", "distance=" + ScalePixels + " known=" + ScaleDistance + " pixel=" + ScalePAR + " unit=" + ScaleUnit);
roiManager("Combine");
roiManager("Add");
run("Set Measurements...", Measurements);
roiManager("Measure");

// ====================================================================================================================
// ===================================================== Macro 6 ======================================================
// ================================================ Name combined ROI =================================================
// ====================================================================================================================
  // Select combined ROI, name, and assign group 10

Roi.setName("Area");
Roi.setGroup(10);
